CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:17
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):ch1
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:OrigBlue
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):ch2
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:OrigGreen
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):ch4
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:OrigRed
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    Rescale intensities?:Yes

RescaleIntensity:[module_num:2|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
    Select the input image:OrigBlue
    Name the output image:RescaledBlue
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.008,0.12
    Intensity range for the output image:0.0,1.0
    Method to rescale pixels below the lower limit:Mask pixels
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Mask pixels
    Custom value for pixels above upper limit:0.0
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
RescaleIntensity:[module_num:3|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
    Select the input image:OrigGreen
    Name the output image:RescaledGreen
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.015,0.45
    Intensity range for the output image:0.0,1.0
    Method to rescale pixels below the lower limit:Mask pixels
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Mask pixels
    Custom value for pixels above upper limit:0.0
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
RescaleIntensity:[module_num:4|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
    Select the input image:OrigRed
    Name the output image:RescaledRed
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.009,0.3
    Intensity range for the output image:0.0,1.0
    Method to rescale pixels below the lower limit:Mask pixels
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Mask pixels
    Custom value for pixels above upper limit:0.0
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
GrayToColor:[module_num:5|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
    Select a color scheme:RGB
    Select the image to be colored red:RescaledRed
    Select the image to be colored green:RescaledGreen
    Select the image to be colored blue:RescaledBlue
    Name the output image:ColorOrigImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:6|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
    Select the type of image to save:Image
    Select the image to save:ColorOrigImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|anal3
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):13,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:CellOutline
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.015,0.02
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigRed
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    Regularization factor:0.05
    Name the outline image:CellOut
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.015,0.02
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Name the outline image:CytoOut
    Retain outlines of the tertiary objects?:Yes
    Shrink smaller object prior to subtraction?:Yes

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledBlue
    Name the output image:NucleiiImage
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
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    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledGreen
    Name the output image:CytoImage
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
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    Load outlines from an image or objects?:Objects
    Select objects to display:Cytoplasm

GrayToColor:[module_num:12|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
    Select a color scheme:RGB
    Select the image to be colored red:RescaledRed
    Select the image to be colored green:CytoImage
    Select the image to be colored blue:NucleiiImage
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:ColorImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|anal1
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:15|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
    Hidden:3
    Select an image to measure:OrigBlue
    Select an image to measure:OrigGreen
    Select an image to measure:OrigRed
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureTexture:[module_num:16|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
    Hidden:3
    Hidden:3
    Hidden:2
    Select an image to measure:OrigBlue
    Select an image to measure:OrigGreen
    Select an image to measure:OrigRed
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Texture scale to measure:5
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:2
    Measure images or objects?:Objects

ExportToACC:[module_num:17|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
    Select the measurements to export:No
    Output file location:Default Output Folder sub-folder|anal2
    Press button to select measurements to export:Cytoplasm|Intensity_MassDisplacement_OrigGreen,Cytoplasm|Intensity_MassDisplacement_OrigBlue,Cytoplasm|Intensity_MassDisplacement_OrigRed,Cytoplasm|Intensity_MinIntensity_OrigGreen,Cytoplasm|Intensity_MinIntensity_OrigBlue,Cytoplasm|Intensity_MinIntensity_OrigRed,Cytoplasm|Intensity_IntegratedIntensityEdge_OrigGreen,Cytoplasm|Intensity_IntegratedIntensityEdge_OrigBlue,Cytoplasm|Intensity_IntegratedIntensityEdge_OrigRed,Cytoplasm|Intensity_StdIntensity_OrigGreen,Cytoplasm|Intensity_StdIntensity_OrigBlue,Cytoplasm|Intensity_StdIntensity_OrigRed,Cytoplasm|Intensity_MinIntensityEdge_OrigGreen,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
    Representation of Nan/Inf:NaN
    Overwrite without warning?:Yes
    Select image name for file prefix:OrigBlue
